PsychoPy2experiment version="2024.2.2"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.2
  Window size (pixels) = [1920, 1080]
  expName = ChangeDetection
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine encoding
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    PolygonComponent item1
      fillColor [set every repeat] = $color1
      lineColor [set every repeat] = $color1
      pos [set every repeat] = $loc1
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item2
      fillColor [set every repeat] = $color2
      lineColor [set every repeat] = $color2
      pos [set every repeat] = $loc2
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item3
      fillColor [set every repeat] = $color3
      lineColor [set every repeat] = $color3
      pos [set every repeat] = $loc3
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item4
      fillColor [set every repeat] = $color4
      lineColor [set every repeat] = $color4
      pos [set every repeat] = $loc4
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item5
      fillColor [set every repeat] = $color5
      lineColor [set every repeat] = $color5
      pos [set every repeat] = $loc5
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item6
      fillColor [set every repeat] = $color6
      lineColor [set every repeat] = $color6
      pos [set every repeat] = $loc6
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item7
      fillColor [set every repeat] = $color7
      lineColor [set every repeat] = $color7
      pos [set every repeat] = $loc7
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item8
      fillColor [set every repeat] = $color8
      lineColor [set every repeat] = $color8
      pos [set every repeat] = $loc8
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if t > 0.25:
            continueRoutine = False
  Routine test
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    PolygonComponent test_indicator
      fillColor = grey
      lineColor = black
      lineWidth = 5
      pos [set every repeat] = $loc1
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent item1_2
      fillColor [set every repeat] = $testcolor
      lineColor [set every repeat] = $testcolor
      pos [set every repeat] = $loc1
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item2_2
      fillColor [set every repeat] = $color2
      lineColor [set every repeat] = $color2
      pos [set every repeat] = $loc2
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item3_2
      fillColor [set every repeat] = $color3
      lineColor [set every repeat] = $color3
      pos [set every repeat] = $loc3
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item4_2
      fillColor [set every repeat] = $color4
      lineColor [set every repeat] = $color4
      pos [set every repeat] = $loc4
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item5_2
      fillColor [set every repeat] = $color5
      lineColor [set every repeat] = $color5
      pos [set every repeat] = $loc5
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item6_2
      fillColor [set every repeat] = $color6
      lineColor [set every repeat] = $color6
      pos [set every repeat] = $loc6
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item7_2
      fillColor [set every repeat] = $color7
      lineColor [set every repeat] = $color7
      pos [set every repeat] = $loc7
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent item8_2
      fillColor [set every repeat] = $color8
      lineColor [set every repeat] = $color8
      pos [set every repeat] = $loc8
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_3
      allowedKeys = 'f', 'j'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine welcome
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    TextComponent welcome_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        This task is a version of the Luck & Vogel (1997) "change-detection" task.

        Press the spacebar to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction1
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    TextComponent instruct1_text
      color = black
      letterHeight = 0.02
      pos = (0, .2)
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a pattern of colored squares. There will be anywhere from 2 to 8 squares in the display.

        The display will appear only briefly, followed by a short delay. Then, the display will reappear, and one of the squares will be outlined by a black circle.

        Your task is to indicate whether this square is the same color or a different color than its initial presentation. Press the 'F' key for same, and the 'J' key for different.

        Below are example trials. Press the right arrow key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = examples.png
      pos = (0, -.2)
      size = (0.6, 0.35)
      startVal [time (s)] = 0.0
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  Routine end_exp
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    TextComponent end_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That is the end of the experiment.

        Please wait while we save your data...
    CodeComponent code_3
      Code Type = JS
  Routine feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_3.corr == 1:
            feedback_text = 'correct'
            feedback_color = 'cyan'
        if key_resp_3.corr == 0:
            feedback_text = 'incorrect'
            feedback_color = 'darkred'
    TextComponent fb_text
      color [set every repeat] = $feedback_color
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine end_practice
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    TextComponent instruct1_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice trials.

        We will now start the real trials.

        Press the right arrow key to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_practice
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    TextComponent welcome_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We will start with some practice trials.

        Remember: press F for same, and J for different.

        Press the spacebar to proceed.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay_interval
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    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Begin Routine:
        startTime = timer.getTime()
      Each Frame:
        currTime = timer.getTime()
        if currTime - startTime < 1:
            continueRoutine = true
        if currTime - startTime >= 1:
            continueRoutine = false
  Routine fix
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if t > 1:
            continueRoutine = False
Flow
  Routine welcome
  Routine instruction1
  Routine start_practice
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', '(-.4, -.4)'), ('loc2', '(.2, 0)'), ('loc3', '(.2, -.2)'), ('loc4', '(-.2, 0)'), ('loc5', '(-.4, .2)'), ('loc6', '(-.4, 0)'), ('loc7', '(-.2, -.2)'), ('loc8', '(.4, .4)'), ('color1', 'white'), ('color2', 'yellow'), ('color3', 'violet'), ('color4', 'black'), ('color5', 'red'), ('color6', 'orange'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'green'), ('trial_type', 'no-change'), ('set_size', 6), ('correct', 'j')]),
      OrderedDict([('loc1', '(.2, 0)'), ('loc2', '(.4, 0)'), ('loc3', '(-.2, -.2)'), ('loc4', '(-.4, 0)'), ('loc5', '(.4, -.4)'), ('loc6', '(-.2, 0)'), ('loc7', '(.4, .2)'), ('loc8', '(.4, .4)'), ('color1', 'white'), ('color2', 'green'), ('color3', 'cyan'), ('color4', 'red'), ('color5', 'yellow'), ('color6', 'orange'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'blue'), ('trial_type', 'change'), ('set_size', 6), ('correct', 'f')]),
      OrderedDict([('loc1', '(-.2, -.4)'), ('loc2', '(-.2, 0)'), ('loc3', '(.4, -.4)'), ('loc4', '(.2, -.4)'), ('loc5', '(.2, .2)'), ('loc6', '(.4, .2)'), ('loc7', '(-.2, -.2)'), ('loc8', '(-.2, .2)'), ('color1', 'orange'), ('color2', 'yellow'), ('color3', 'grey'), ('color4', 'grey'), ('color5', 'grey'), ('color6', 'grey'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'cyan'), ('trial_type', 'no-change'), ('set_size', 2), ('correct', 'j')]),
      OrderedDict([('loc1', '(.4, 0)'), ('loc2', '(.2, .2)'), ('loc3', '(-.2, .2)'), ('loc4', '(-.4, .4)'), ('loc5', '(.2, .4)'), ('loc6', '(-.4, -.4)'), ('loc7', '(.4, .2)'), ('loc8', '(.2, 0)'), ('color1', 'yellow'), ('color2', 'green'), ('color3', 'cyan'), ('color4', 'black'), ('color5', 'orange'), ('color6', 'blue'), ('color7', 'white'), ('color8', 'red'), ('color9', 'red'), ('trial_type', 'no-change'), ('set_size', 8), ('correct', 'j')])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
    Routine fix
    Routine encoding
    Routine delay_interval
    Routine test
    Routine feedback
  LoopTerminator practice_trials
  Routine end_practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', '(.4, -.2)'), ('loc2', '(.4, 0)'), ('loc3', '(-.2, -.2)'), ('loc4', '(.2, -.4)'), ('loc5', '(.4, .4)'), ('loc6', '(-.2, .2)'), ('loc7', '(-.4, -.4)'), ('loc8', '(.4, -.4)'), ('color1', 'green'), ('color2', 'red'), ('color3', 'black'), ('color4', 'white'), ('color5', 'red'), ('color6', 'yellow'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'violet'), ('trial_type', 'no-change'), ('set_size', 6), ('correct', 'j')]),
      OrderedDict([('loc1', '(.4, 0)'), ('loc2', '(.4, .2)'), ('loc3', '(.2, .4)'), ('loc4', '(.2, .2)'), ('loc5', '(.2, -.2)'), ('loc6', '(-.4, -.4)'), ('loc7', '(-.2, .4)'), ('loc8', '(.4, .4)'), ('color1', 'cyan'), ('color2', 'blue'), ('color3', 'orange'), ('color4', 'green'), ('color5', 'grey'), ('color6', 'grey'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'yellow'), ('trial_type', 'change'), ('set_size', 4), ('correct', 'f')]),
      OrderedDict([('loc1', '(-.4, .4)'), ('loc2', '(.4, .2)'), ('loc3', '(.4, 0)'), ('loc4', '(.2, -.4)'), ('loc5', '(.2, .4)'), ('loc6', '(.4, -.4)'), ('loc7', '(-.2, -.4)'), ('loc8', '(.4, .4)'), ('color1', 'violet'), ('color2', 'orange'), ('color3', 'blue'), ('color4', 'green'), ('color5', 'cyan'), ('color6', 'red'), ('color7', 'black'), ('color8', 'red'), ('color9', 'white'), ('trial_type', 'change'), ('set_size', 8), ('correct', 'f')]),
      OrderedDict([('loc1', '(-.2, -.2)'), ('loc2', '(.4, .2)'), ('loc3', '(-.4, .4)'), ('loc4', '(-.2, .4)'), ('loc5', '(-.2, -.4)'), ('loc6', '(.2, .2)'), ('loc7', '(.4, -.2)'), ('loc8', '(.4, 0)'), ('color1', 'red'), ('color2', 'green'), ('color3', 'grey'), ('color4', 'grey'), ('color5', 'grey'), ('color6', 'grey'), ('color7', 'grey'), ('color8', 'grey'), ('color9', 'red'), ('trial_type', 'no-change'), ('set_size', 2), ('correct', 'j')])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
    Routine fix
    Routine encoding
    Routine delay_interval
    Routine test
  LoopTerminator trials
  Routine end_exp
